#!/bin/csh 
var2pipe -in ./y2at_wnoe2.var   \ 
  -xN             2048   \ 
  -yN              800   \ 
  -xT             1024   \ 
  -yT              400   \ 
  -xMODE        Complex  \ 
  -yMODE        Complex  \ 
  -xSW         7800.000  \ 
  -ySW         7800.000  \ 
  -xOBS         500.297  \ 
  -yOBS         500.297  \ 
  -xCAR           4.920  \ 
  -yCAR           4.920  \ 
  -xLAB              H1  \ 
  -yLAB              H1  \ 
  -ndim               2  \ 
  -out ./temp -verb -ov 
nmrPipe -in ./temp   \ 
# | nmrPipe -fn SOL      \ 
| nmrPipe -fn SP -off 0.02 -end 0.999 -pow 1 -c 1.0         \ 
| nmrPipe -fn EM -lb 22.0       \ 
| nmrPipe -fn FT          \ 
| nmrPipe -fn PS -p0 -45.0 -p1 -117.0 -di         \ 
| nmrPipe -fn EXT -x1 12.5ppm -xn -0.5ppm -sw -round   \ 
| nmrPipe -fn TP          \ 
| nmrPipe -fn ZF -auto         \ 
| nmrPipe -fn SP -off 0.50 -end 0.999 -pow 1 -c 0.6         \ 
| nmrPipe -fn EM -lb 1.0   \ 
| nmrPipe -fn FT         \ 
| nmrPipe -fn PS -p0 -20.0  -p1 40.0  -di         \ 
| nmrPipe -fn EXT -x1 12.5ppm -xn -0.5ppm -sw -round   \ 
| nmrPipe -fn POLY -auto    \ 
| nmrPipe -fn TP   \ 
| nmrPipe -fn POLY -auto  \ 
  -out ./temp2 -verb -ov 
pipe2ucsf temp2 y2at_wnoe2.spa 
rm -f temp 
rm -f temp2 
cp y2at_wnoe2.spa ~/Sparky/Save/
